PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = (2048, 1600)
  color = Black
  expName = Flanker Compatibility Task
  frameRateMsg = Loading...
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Trial_Routine
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    PolygonComponent Stim_1
      fillColor = white
      opacity [set every repeat] = 1
      pos = (0, 6)
      saveStartStop = False
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      vertices = 4
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    PolygonComponent Stim_2
      fillColor = white
      opacity [set every repeat] = 1
      pos = (5.20, 3)
      saveStartStop = False
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      vertices = 4
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    PolygonComponent Stim_3
      fillColor = white
      opacity [set every repeat] = 1
      pos = (5.20, -3)
      saveStartStop = False
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      vertices = 4
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    PolygonComponent Stim_4
      fillColor = white
      opacity [set every repeat] = 1
      pos = (0, -6)
      saveStartStop = False
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      vertices = 4
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    PolygonComponent Stim_5
      fillColor = white
      opacity [set every repeat] = 1
      pos = (-5.20, -3)
      saveStartStop = False
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      vertices = 4
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    PolygonComponent Stim_6
      fillColor = white
      opacity [set every repeat] = 1
      pos = (-5.20, 3)
      saveStartStop = False
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      vertices = 4
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    CodeComponent Trials_code
      Code Type = Py
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      Begin Experiment:
        total_trials_cnt = 0

        # 形狀頂點定義
        shapes = {
            'square': [(-0.7,-0.7), (0.7,-0.7), (0.7,0.7), (-0.7,0.7)],
            'diamond': [(0,1), (1,0), (0,-1), (-1,0)],
            'tri': [(0,0.8), (-0.8,-0.7), (0.8,-0.7)],
            'tri_inv': [(0,-0.8), (-0.8,0.7), (0.8,0.7)],
            'penta': [(0, 0.8), (-0.76, 0.25), (-0.47, -0.65), (0.47, -0.65), (0.76, 0.25)],
            'penta_inv': [(0, -0.8), (0.76, -0.25), (0.47, 0.65), (-0.47, 0.65), (-0.76, -0.25)]
        }

        filler_pool = ['tri', 'tri_inv', 'penta', 'penta_inv']
        diff_map = {1: 0, 2: 1, 3: 3, 4: 5}

        # 把刺激組件放進清單
        stims = [Stim_1, Stim_2, Stim_3, Stim_4, Stim_5, Stim_6]
      Begin Routine:
        import random

        # 1. 確保組件清單正確
        stims = [Stim_1, Stim_2, Stim_3, Stim_4, Stim_5, Stim_6]

        # 2. 位置隨機化計算
        num_fillers = diff_map[difficulty]
        other_indices = [i for i in range(6) if i != target_idx]
        random.shuffle(other_indices)
        filler_indices = other_indices[:num_fillers]

        # 3. 遍歷設定每個 Stim 組件的屬性
        for i, s_cong in enumerate(stims):
            if i == target_idx:
                # 設定目標（vertices 決定形狀，opacity 決定顯示與否）：
                s_cong.setVertices(shapes[target_type])
                s_cong.setOpacity(1)
            elif i in filler_indices:
                # 設定干擾物
                rand_f = random.choice(filler_pool)
                s_cong.setVertices(shapes[rand_f])
                s_cong.setOpacity(1)
            else:
                # 隱藏沒用到的位置
                s_cong.setOpacity(0)

        # 4. 設定外圍 Distractor
        if condition == 'cong':
            d_v = shapes[target_type]
        else:
            d_v = shapes['diamond'] if target_type == 'square' else shapes['square']

        Distractor.setVertices(d_v)
        Distractor.setOpacity(1)
        # 位置由 Excel 的 dist_pos_x 控制，這部分可以留在 Builder 的 Pos 欄位填 [dist_pos_x, 0]
      End Routine:
        # --- 練習回合的計數 ---
        if 'Prac_Loop' in locals() and Prac_Loop.status == STARTED:
            if Anskey.corr == 1:
                prac_corr_cnt += 1

        # --- 正式實驗的計數與統計 ---
        if 'Trials_Loop' in locals() and Trials_Loop.status == STARTED:
            # 休息計數
            total_trials_cnt += 1

            # 數據統計初始化
            if 'summary' not in expInfo:
                expInfo['summary'] = {'corr': 0, 'cong_rt': [], 'incong_rt': []}

            # 紀錄正確率與 RT
            if Anskey.corr == 1:
                expInfo['summary']['corr'] += 1
                if Anskey.rt is not None:
                    if condition == 'cong':
                        expInfo['summary']['cong_rt'].append(Anskey.rt)
                    else:
                        expInfo['summary']['incong_rt'].append(Anskey.rt)
    TextComponent Fixation
      letterHeight = 0.75
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = +
      wrapWidth = 2
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    PolygonComponent Circle_1
      lineWidth = 2
      pos = (0, 6)
      saveStartStop = False
      shape = circle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent Circle_2
      lineWidth = 2
      pos = (5.20, 3)
      saveStartStop = False
      shape = circle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent Circle_3
      lineWidth = 2
      pos = (5.20, -3)
      saveStartStop = False
      shape = circle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent Circle_4
      lineWidth = 2
      pos = (0, -6)
      saveStartStop = False
      shape = circle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent Circle_5
      lineWidth = 2
      pos = (-5.20, -3)
      saveStartStop = False
      shape = circle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent Circle_6
      lineWidth = 2
      pos = (-5.20, 3)
      saveStartStop = False
      shape = circle
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent Distractor
      fillColor = white
      pos [set every repeat] = (dist_pos_x, 0)
      saveStartStop = False
      shape = custom polygon...
      size = (1.5, 1.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      vertices = 4
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    KeyboardComponent Anskey
      allowedKeys = 'a','l'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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  Routine Intro
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # 初始化練習計數器
        prac_corr_cnt = 0

        # 初始化正式實驗計數器
        total_trials_cnt = 0
    TextComponent Intro_text
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 26
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      text:
        歡迎參與本作業。

        您將看到六個圓圈圍繞螢幕中央的十字凝視點。
        作業過程中，可能會有數量不等的形狀個別出現在圓圈中。

        請您在看到形狀出現後，盡快判斷「圓圈內的形狀」
        是否包含「正方形」或「菱形」，
        並盡可能又快又正確地按鍵反應：

        - 圓圈內出現正方形：按下「A」鍵。
        - 圓圈內出現菱形：按下「L」鍵。

        然而，請無視圓圈之外出現的正方形或菱形，
        並只判斷「圓圈內」的形狀包含正方形或菱形。

        我們會先練習個幾題，再開始正式作業。


        【準備好後，請按「空白鍵」開始練習】
    KeyboardComponent Intro_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine ThankYou
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    CodeComponent Thanks_code
      Code Type = Auto->JS
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      Begin Routine:
        # 計算平均值
        stats = expInfo['summary']
        total_q = Trials_Loop.nTotal

        acc = (stats['corr'] / total_q) * 100
        avg_cong = sum(stats['cong_rt']) / len(stats['cong_rt']) if stats['cong_rt'] else 0
        avg_incong = sum(stats['incong_rt']) / len(stats['incong_rt']) if stats['incong_rt'] else 0

        avg_cong_ms = avg_cong * 1000
        avg_incong_ms = avg_incong * 1000

        # 2. 格式化顯示文字
        # 使用 :.2f 將數值格式化為小數點後兩位
        # 並將單位字樣從「秒」更換為「毫秒」
        final_msg = f"作業結束，您的表現如下：\n\n" \
                    f"總正確率：{acc:.1f}%\n" \
                    f"[Congruent] RT：{avg_cong_ms:.2f} 毫秒\n" \
                    f"[Incongruent] RT：{avg_incong_ms:.2f} 毫秒\n\n" \
                    f"感謝您的參與！\n\n\n" \
                    f"【請按「空白鍵」退出作業】"
    TextComponent Thanks_text
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $final_msg
      wrapWidth = 26
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    KeyboardComponent Thanks_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine BreakTime_Routine
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    CodeComponent BreakTime_code
      Code Type = Py
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      Begin Experiment:
        # 初始化計數器
        total_trials_cnt = 0
      Begin Routine:
        # 執行第 96 題後顯示休息畫面
        # 使用 total_trials_cnt % 96 == 0 且不為 0 的邏輯
        total_trials_cnt += 1

        if total_trials_cnt == 96:
            continueRoutine = True
        else:
            continueRoutine = False # 沒到 96 題就跳過休息
      End Routine:
        if total_trials_cnt == 96:
            continueRoutine = True
            print("Break Time!")
        else:
            continueRoutine = False
    TextComponent BreakTime_text
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 26
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      text:
        您現在可以稍作休息一下！


        【準備好後，請按「空白鍵」繼續作業】
    KeyboardComponent BreakTime_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine Code
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    CodeComponent BreakTime_code_2
      Code Type = Py
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      Begin Routine:
        # 根據外層迴圈的次數，更新內層要抽取的題目索引
        expInfo['current_selection'] = expInfo['all_blocks'][expInfo['block_counter']]
  Routine Ready
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    TextComponent Ready_text
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 26
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      text:
        接下來即將開始正式作業。


        請您在看到形狀出現後，盡快判斷「圓圈內的形狀」
        是否包含「正方形」或「菱形」，
        並盡可能又快又正確地按鍵反應：

        - 圓圈內出現正方形：按下「A」鍵。
        - 圓圈內出現菱形：按下「L」鍵。

        然而，請無視圓圈之外出現的正方形或菱形，
        並只判斷「圓圈內」的形狀包含正方形或菱形。


        【準備好後，請按「空白鍵」開始正式作業】
    KeyboardComponent Ready_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine Feedback_Routine
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # 檢查 Anskey 的結果
        if not Anskey.keys:
            fb_msg = "太慢作答！"

        elif Anskey.corr == 1:
            fb_msg = "正確"

        else:
            fb_msg = "錯誤"


        # 將顏色套用到文字組件
        Feedback_text.setText(fb_msg)
    TextComponent Feedback_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_msg
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  Routine Prac_Check
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    CodeComponent Prac_Check_code
      Code Type = Auto->JS
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      Begin Routine:
        # 設定達標門檻
        required_score = 14

        if prac_corr_cnt >= required_score:
            # 達標：結束外層迴圈，進入正式實驗
            Repeat_Prac_Loop.finished = True
            prac_feedback_msg = f"練習階段結束。您的正確題數為 {prac_corr_cnt}。\n\n\n【請按「空白鍵」繼續】"
        else:
            # 未達標：不結束外層迴圈，它會自動重跑一次內層 Prac_Loop
            prac_feedback_msg = f"練習正確題數為 {prac_corr_cnt}，\n未達練習階段之通過門檻 14 題。\n\n要請您再重新練習一次，確保您熟悉作業規則。\n\n\n【請按「空白鍵」開始重新練習】"
            prac_corr_cnt = 0
    TextComponent text
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $prac_feedback_msg
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  LoopInitiator Repeat_Prac_Loop loopType="TrialHandler"
    loopType = random
    nReps = 99
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    LoopInitiator Prac_Loop loopType="TrialHandler"
      conditionsFile = Prac_Stimulus_Configurations.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'difficulty': 1, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': -10, 'ans': 'a', 'target_idx': 1},
        {'difficulty': 1, 'target_type': 'square', 'condition': 'incong', 'dist_pos_x': 10, 'ans': 'a', 'target_idx': 3},
        {'difficulty': 1, 'target_type': 'diamond', 'condition': 'cong', 'dist_pos_x': 10, 'ans': 'l', 'target_idx': 0},
        {'difficulty': 1, 'target_type': 'diamond', 'condition': 'incong', 'dist_pos_x': -10, 'ans': 'l', 'target_idx': 5},
        {'difficulty': 2, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': 10, 'ans': 'a', 'target_idx': 5},
        {'difficulty': 2, 'target_type': 'square', 'condition': 'incong', 'dist_pos_x': -10, 'ans': 'a', 'target_idx': 2},
        {'difficulty': 2, 'target_type': 'diamond', 'condition': 'cong', 'dist_pos_x': -10, 'ans': 'l', 'target_idx': 3},
        {'difficulty': 2, 'target_type': 'diamond', 'condition': 'incong', 'dist_pos_x': 10, 'ans': 'l', 'target_idx': 0},
        {'difficulty': 3, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': -10, 'ans': 'a', 'target_idx': 1},
        {'difficulty': 3, 'target_type': 'square', 'condition': 'incong', 'dist_pos_x': 10, 'ans': 'a', 'target_idx': 5},
        {'difficulty': 3, 'target_type': 'diamond', 'condition': 'cong', 'dist_pos_x': 10, 'ans': 'l', 'target_idx': 1},
        {'difficulty': 3, 'target_type': 'diamond', 'condition': 'incong', 'dist_pos_x': -10, 'ans': 'l', 'target_idx': 4},
        {'difficulty': 4, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': 10, 'ans': 'a', 'target_idx': 5}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
      Routine Trial_Routine
      Routine Feedback_Routine
    LoopTerminator Prac_Loop
    Routine Prac_Check
  LoopTerminator Repeat_Prac_Loop
  Routine Ready
  LoopInitiator Trials_Loop loopType="TrialHandler"
    conditionsFile = Stimulus_Configurations.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'difficulty': 1, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': -10, 'ans': 'a', 'target_idx': 0},
      {'difficulty': 1, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': -10, 'ans': 'a', 'target_idx': 1},
      {'difficulty': 1, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': -10, 'ans': 'a', 'target_idx': 2},
      {'difficulty': 1, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': -10, 'ans': 'a', 'target_idx': 3},
      {'difficulty': 1, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': -10, 'ans': 'a', 'target_idx': 4},
      {'difficulty': 1, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': -10, 'ans': 'a', 'target_idx': 5},
      {'difficulty': 1, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': 10, 'ans': 'a', 'target_idx': 0},
      {'difficulty': 1, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': 10, 'ans': 'a', 'target_idx': 1},
      {'difficulty': 1, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': 10, 'ans': 'a', 'target_idx': 2},
      {'difficulty': 1, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': 10, 'ans': 'a', 'target_idx': 3},
      {'difficulty': 1, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': 10, 'ans': 'a', 'target_idx': 4},
      {'difficulty': 1, 'target_type': 'square', 'condition': 'cong', 'dist_pos_x': 10, 'ans': 'a', 'target_idx': 5},
      {'difficulty': 1, 'target_type': 'square', 'condition': 'incong', 'dist_pos_x': -10, 'ans': 'a', 'target_idx': 0}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
    Routine Trial_Routine
    Routine BreakTime_Routine
  LoopTerminator Trials_Loop
  Routine ThankYou
